<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.Vision.Design;assembly=Bonsai.Vision.Design"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>17458136</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>BehaviorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM6</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
          <beh:Camera0Frequency>50</beh:Camera0Frequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
          <beh:StartCameras>CameraOutput0</beh:StartCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D2</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
          <beh:StopCameras>CameraOutput0</beh:StopCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>344</cv:X>
            <cv:Y>180</cv:Y>
            <cv:Width>770</cv:Width>
            <cv:Height>753</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Cropped</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>93</cv:Val1>
            <cv:Val2>57</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>69</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>3000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Individual1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>98</cv:Val0>
            <cv:Val1>26</cv:Val1>
            <cv:Val2>23</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>3000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Individual2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Individual2</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Individual1</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Individual2</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Cropped</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="p1:IplImageVisualizer" />
      </Expression>
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>1</viz:ColumnCount>
        <viz:RowCount>1</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="28" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="33" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="41" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="41" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source3" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>